<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:drw="clr-namespace:Bonsai.Vision.Drawing;assembly=Bonsai.Vision"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p2="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>7</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Circle Position</Name>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>ToneHiddenGoalXP\2M_data\Day 42\tonevalue.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>X,Y</io:Selector>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>8</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>4</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>5</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Size</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Size" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:CreateCanvas">
          <drw:Size>
            <drw:Width>1600</drw:Width>
            <drw:Height>896</drw:Height>
          </drw:Size>
          <drw:Depth>U8</drw:Depth>
          <drw:Channels>3</drw:Channels>
          <drw:Color>
            <drw:Val0>0</drw:Val0>
            <drw:Val1>0</drw:Val1>
            <drw:Val2>0</drw:Val2>
            <drw:Val3>0</drw:Val3>
          </drw:Color>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>6</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Image" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:AddImage">
          <drw:Destination>
            <drw:X>0</drw:X>
            <drw:Y>0</drw:Y>
            <drw:Width>0</drw:Width>
            <drw:Height>0</drw:Height>
          </drw:Destination>
          <drw:Interpolation>Linear</drw:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Center" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:Circle">
          <drw:Center>
            <drw:X>575</drw:X>
            <drw:Y>597</drw:Y>
          </drw:Center>
          <drw:Radius>70</drw:Radius>
          <drw:Color>
            <drw:Val0>0</drw:Val0>
            <drw:Val1>0</drw:Val1>
            <drw:Val2>255</drw:Val2>
            <drw:Val3>255</drw:Val3>
          </drw:Color>
          <drw:Thickness>2</drw:Thickness>
          <drw:LineType>Connected8</drw:LineType>
          <drw:Shift>0</drw:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:DrawCanvas" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateDiscreteUniform">
          <p1:Lower>0</p1:Lower>
          <p1:Upper>2</p1:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Sample" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Equal" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CreatePoint2f">
          <cv:X>950</cv:X>
          <cv:Y>305</cv:Y>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Equal" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CreatePoint2f">
          <cv:X>575</cv:X>
          <cv:Y>597</cv:Y>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Equal" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CreatePoint2f">
          <cv:X>670</cv:X>
          <cv:Y>175</cv:Y>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Circle Position</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>2000</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>6600</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>12100</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Frequency" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>9000</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>10000</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>11000</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Amplitude" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FunctionGenerator">
          <dsp:BufferLength>441</dsp:BufferLength>
          <dsp:Frequency>2000</dsp:Frequency>
          <dsp:Waveform>Sine</dsp:Waveform>
          <dsp:SampleRate>44100</dsp:SampleRate>
          <dsp:Amplitude>9000</dsp:Amplitude>
          <dsp:Offset>0</dsp:Offset>
          <dsp:Phase>0</dsp:Phase>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:AudioPlayback">
          <p2:SampleRate>44100</p2:SampleRate>
          <p2:State>Playing</p2:State>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Behavior1Events</Name>
      </Expression>
      <Expression xsi:type="beh:Parse">
        <harp:Register xsi:type="beh:TimestampedOutputSet" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Behavior1Events</Name>
      </Expression>
      <Expression xsi:type="beh:Parse">
        <harp:Register xsi:type="beh:TimestampedDigitalInputState" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>ToneHiddenGoalXP\2M_data\Day 42\nosepoke.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:ListSeparator />
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Value.Value,Timestamp.Hour,Timestamp.Minute,Timestamp.Second,Timestamp.Millisecond</io:Selector>
      </Expression>
      <Expression xsi:type="beh:Parse">
        <harp:Register xsi:type="beh:TimestampedOutputSet" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>ToneHiddenGoalXP\2M_data\Day 42\rewarded_pokes.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:ListSeparator />
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Value.Value,Timestamp.Hour,Timestamp.Minute,Timestamp.Second,Timestamp.Millisecond</io:Selector>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>0</vid:Index>
          <vid:Format>
            <vid:FrameSize>
              <vid:Width>1600</vid:Width>
              <vid:Height>896</vid:Height>
            </vid:FrameSize>
            <vid:AverageFrameRate>30</vid:AverageFrameRate>
            <vid:MaximumFrameRate>30</vid:MaximumFrameRate>
            <vid:BitCount>24</vid:BitCount>
          </vid:Format>
          <vid:CaptureProperties>
            <vid:CameraProperty>
              <vid:Property>Focus</vid:Property>
              <vid:Value>0</vid:Value>
              <vid:ControlFlags>Manual</vid:ControlFlags>
            </vid:CameraProperty>
            <vid:CameraProperty>
              <vid:Property>Exposure</vid:Property>
              <vid:Value>0</vid:Value>
              <vid:ControlFlags>Auto</vid:ControlFlags>
            </vid:CameraProperty>
          </vid:CaptureProperties>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>ToneHiddenGoalXP\2M_data\Day 42\2MD42_video.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>ToneHiddenGoalXP\2M_data\Day 42\frametimestamp.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Timestamp.Hour,Timestamp.Minute,Timestamp.Second,Timestamp.Millisecond</io:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>2250</gl:Width>
          <gl:Height>2250</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>#141414</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>false</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Hidden</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Third</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>Behavior1Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="beh:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>false</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM3</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Behavior1Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Z</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Trial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Annotation">
              <Name>Detect Nosepoke and Deliver Reward</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Behavior1Events</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:DigitalInputState" />
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
                <Value>DIPort0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToInt32(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>Deliver Reward</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                <beh:OutputSet>SupplyPort0</beh:OutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Behavior1Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>ToneHiddenGoalXP\2M_data\Day 42\keypress.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:ListSeparator />
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Timestamp.Hour,Timestamp.Minute,Timestamp.Second,Timestamp.Millisecond</io:Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>Behavior2 Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="beh:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>false</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM4</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Behavior2 Events</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Behavior2 Commands</Name>
      </Expression>
      <Expression xsi:type="beh:Parse">
        <harp:Register xsi:type="beh:DigitalInputState" />
      </Expression>
      <Expression xsi:type="BitwiseAnd">
        <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
          <Value>DIPort0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Convert.ToInt32(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Behavior2 Events</Name>
      </Expression>
      <Expression xsi:type="beh:Parse">
        <harp:Register xsi:type="beh:TimestampedDigitalInputState" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>ToneHiddenGoalXP\2M_data\Day 42\DigitalInputStateUnrewarded.csv</io:FileName>
        <io:ListSeparator>,</io:ListSeparator>
        <io:Append>true</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Value.Value,Timestamp.Hour,Timestamp.Minute,Timestamp.Second,Timestamp.Millisecond</io:Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="15" Label="Source1" />
      <Edge From="3" To="17" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="10" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="14" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="16" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="20" To="23" Label="Source1" />
      <Edge From="20" To="25" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="21" To="30" Label="Source1" />
      <Edge From="21" To="35" Label="Source1" />
      <Edge From="22" To="27" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="23" To="29" Label="Source1" />
      <Edge From="23" To="34" Label="Source1" />
      <Edge From="24" To="27" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="25" To="31" Label="Source1" />
      <Edge From="25" To="36" Label="Source1" />
      <Edge From="26" To="27" Label="Source3" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="41" Label="Source1" />
      <Edge From="29" To="32" Label="Source1" />
      <Edge From="30" To="32" Label="Source2" />
      <Edge From="31" To="32" Label="Source3" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="39" Label="Source1" />
      <Edge From="34" To="37" Label="Source1" />
      <Edge From="35" To="37" Label="Source2" />
      <Edge From="36" To="37" Label="Source3" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source2" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source2" />
      <Edge From="41" To="44" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source2" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="46" To="50" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="53" To="55" Label="Source1" />
      <Edge From="54" To="55" Label="Source2" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="55" To="57" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="65" To="66" Label="Source1" />
      <Edge From="65" To="69" Label="Source1" />
      <Edge From="66" To="67" Label="Source1" />
      <Edge From="67" To="68" Label="Source1" />
      <Edge From="69" To="70" Label="Source1" />
      <Edge From="71" To="72" Label="Source1" />
      <Edge From="72" To="73" Label="Source1" />
      <Edge From="74" To="75" Label="Source1" />
      <Edge From="75" To="76" Label="Source1" />
      <Edge From="76" To="77" Label="Source1" />
      <Edge From="77" To="78" Label="Source1" />
      <Edge From="78" To="79" Label="Source1" />
      <Edge From="80" To="81" Label="Source1" />
      <Edge From="81" To="82" Label="Source1" />
      <Edge From="82" To="83" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>